begintemplate KoleCell

celsius=37		// nominal temperature of simulation
Ri=100    		// intracellular resistivity ohm-cm
Cm=0.9      		// specific membrane capacitance in uF/cm^2
Rm=15000      		// specific membrane resistivity in ohm/cm^2 
v_init=-88     	// to obtain a membrane potential of -75 at the soma 
spinescale=2		// factor used to membrane area to account for spines
na_segment = 3000
na_soma = 60
na_node= 2500 

proc celldef() {
  topol()
  subsets()
  geom()
  biophys()
  geom_nseg()
}



create soma, axon, dend[43], apic[87]
// create myelin[45], node[42]
// for i=0,44	{
//             myelin[i] {
//             nseg = 20	//for space plot
//             L = 60	//spacing 100 times the diameter  
//             diam = 1.6 
//             }
//     }

// for i=0,41	{

//         node[i] {
//             nseg = 1
//             L = 1           
//             diam = 1.1
//             }
// }


proc topol() { local i
  connect axon(0), soma(0.5)
  connect dend(0), soma(0.5)
  for i = 1, 3 connect dend[i](0), dend[i-1](1)
  connect dend[4](0), dend[2](1)
  connect dend[5](0), dend[1](1)
  connect dend[6](0), dend(1)
  for i = 7, 8 connect dend[i](0), dend[6](1)
  connect dend[9](0), soma(0.5)
  for i = 10, 11 connect dend[i](0), dend[i-1](1)
  connect dend[12](0), dend[10](1)
  connect dend[13](0), dend[9](1)
  connect dend[14](0), soma(0.5)
  for i = 15, 16 connect dend[i](0), dend[14](1)
  connect dend[17](0), soma(0.5)
  for i = 18, 19 connect dend[i](0), dend[17](1)
  connect dend[20](0), soma(0.5)
  for i = 21, 22 connect dend[i](0), dend[20](1)
  for i = 23, 24 connect dend[i](0), dend[22](1)
  connect dend[25](0), soma(0.5)
  for i = 26, 27 connect dend[i](0), dend[25](1)
  connect dend[28](0), soma(0.5)
  for i = 29, 30 connect dend[i](0), dend[28](1)
  for i = 31, 32 connect dend[i](0), dend[30](1)
  for i = 33, 34 connect dend[i](0), dend[32](1)
  connect dend[35](0), soma(0.5)
  for i = 36, 37 connect dend[i](0), dend[35](1)
  for i = 38, 39 connect dend[i](0), dend[i-1](1)
  connect dend[40](0), dend[38](1)
  connect dend[41](0), dend[37](1)
  connect dend[42](0), soma(0.5)
  connect apic(0), soma(0.5)
  for i = 1, 2 connect apic[i](0), apic[i-1](1)
  connect apic[3](0), apic[1](1)
  connect apic[4](0), apic(1)
  for i = 5, 6 connect apic[i](0), apic[i-1](1)
  connect apic[7](0), apic[5](1)
  connect apic[8](0), apic[4](1)
  for i = 9, 10 connect apic[i](0), apic[8](1)
  for i = 11, 12 connect apic[i](0), apic[i-1](1)
  connect apic[13](0), apic[11](1)
  for i = 14, 15 connect apic[i](0), apic[13](1)
  for i = 16, 17 connect apic[i](0), apic[15](1)
  connect apic[18](0), apic[10](1)
  for i = 19, 20 connect apic[i](0), apic[i-1](1)
  connect apic[21](0), apic[19](1)
  for i = 22, 23 connect apic[i](0), apic[21](1)
  connect apic[24](0), apic[18](1)
  for i = 25, 26 connect apic[i](0), apic[i-1](1)
  connect apic[27](0), apic[25](1)
  for i = 28, 29 connect apic[i](0), apic[27](1)
  connect apic[30](0), apic[24](1)
  for i = 31, 32 connect apic[i](0), apic[30](1)
  for i = 33, 34 connect apic[i](0), apic[32](1)
  for i = 35, 36 connect apic[i](0), apic[34](1)
  for i = 37, 38 connect apic[i](0), apic[i-1](1)
  connect apic[39](0), apic[37](1)
  connect apic[40](0), apic[36](1)
  for i = 41, 42 connect apic[i](0), apic[40](1)
  for i = 43, 44 connect apic[i](0), apic[42](1)
  for i = 45, 49 connect apic[i](0), apic[i-1](1)
  connect apic[50](0), apic[48](1)
  for i = 51, 52 connect apic[i](0), apic[50](1)
  connect apic[53](0), apic[47](1)
  for i = 54, 55 connect apic[i](0), apic[53](1)
  for i = 56, 57 connect apic[i](0), apic[55](1)
  connect apic[58](0), apic[46](1)
  for i = 59, 60 connect apic[i](0), apic[58](1)
  for i = 61, 62 connect apic[i](0), apic[60](1)
  connect apic[63](0), apic[45](1)
  for i = 64, 65 connect apic[i](0), apic[63](1)
  for i = 66, 67 connect apic[i](0), apic[65](1)
  connect apic[68](0), apic[44](1)
  for i = 69, 70 connect apic[i](0), apic[i-1](1)
  connect apic[71](0), apic[69](1)
  for i = 72, 73 connect apic[i](0), apic[i-1](1)
  connect apic[74](0), apic[72](1)
  connect apic[75](0), apic[71](1)
  connect apic[76](0), apic[68](1)
  for i = 77, 79 connect apic[i](0), apic[i-1](1)
  connect apic[80](0), apic[78](1)
  connect apic[81](0), apic[77](1)
  for i = 82, 83 connect apic[i](0), apic[81](1)
  connect apic[84](0), apic[76](1)
  for i = 85, 86 connect apic[i](0), apic[84](1)
  basic_shape()
//   axon connect myelin[0](1), 1
//   myelin[0] connect node[0](1), 0
  
//   for i=0,8  {node[i] connect myelin[i+1](1), 0 
//               myelin[i+1] connect node[i+1](1), 0}
  
  
//   node[1] connect myelin[10](1), 0
//   myelin[10] connect node[10](1), 0
  
//   for i=10,13  {node[i] connect myelin[i+1](1), 0 
//           myelin[i+1] connect node[i+1](1), 0}
  
  
//   node[0] connect myelin[15](1), 0
//   myelin[15] connect node[15](1), 0
//   node [15] connect myelin[44](1), 0
  
//   node[2] connect myelin[42](1), 0
//   myelin [42] connect myelin[43](1), 0
  
//   node[12] connect myelin[16](1), 0
//   myelin[16] connect node[16](1), 0
  
//   for i=16,29  {node[i] connect myelin[i+1](1), 0 
//           myelin[i+1] connect node[i+1](1), 0
//   }
  
//   node [20] connect myelin[31](1), 0
//   myelin [31] connect node[31](1), 0
  
//   for i=31,34  {node[i] connect myelin[i+1](1), 0 
//           myelin[i+1] connect node[i+1](1), 0
//   }
  
//   node[33] connect myelin[36](1), 0
//   myelin [36] connect node[36](1), 0
  
//   node[26] connect myelin[37](1), 0
//   myelin [37] connect node[37](1), 0
  
//   for i=37,39  {node[i] connect myelin[i+1](1), 0 
//               myelin[i+1] connect node[i+1](1), 0}

//   node[16] connect myelin[41](1), 0
//   myelin [41] connect node[41](1), 0
}

proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(-4.56673, -0.108046, 0, 5.58035)
	pt3dadd(-4.10841, 1.72379, 0, 10.7661)
	pt3dadd(-3.65008, 3.55562, 0, 14.4629)
	pt3dadd(-3.19176, 5.38745, 0, 16.4616)
	pt3dadd(-2.73344, 7.21929, 0, 19.1307)
	pt3dadd(-2.27512, 9.05112, 0, 21.2892)
	pt3dadd(-1.8168, 10.883, 0, 25.1191)
	pt3dadd(-1.35847, 12.7148, 0, 26.1753)
	pt3dadd(-0.900151, 14.5466, 0, 24.6068)
	pt3dadd(-0.441829, 16.3785, 0, 23.6303)
	pt3dadd(0.0164932, 18.2103, 0, 21.283)
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  }
}
proc shape3d_2() {
  dend[2] {	pt3dadd(73.43, -8.18, -20.37, 1.16)
	pt3dadd(73.37, -7.54, -20.37, 1.16)
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  }
}
proc shape3d_3() {
  dend[5] {	pt3dadd(77.05, -20.92, -23.99, 0.96)
	pt3dadd(77.11, -20.86, -23.99, 0.96)
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  }
}
proc shape3d_4() {
  dend[5] {	pt3dadd(141.76, -96.64, -43.51, 0.52)
	pt3dadd(142.21, -96.96, -43.51, 0.52)
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  }
}
proc shape3d_5() {
  dend[8] {	pt3dadd(60.88, -91.99, 3.52, 0.7)
	pt3dadd(60.82, -92.05, 3.52, 0.7)
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  }
}
proc shape3d_6() {
  dend[10] {	pt3dadd(48.83, 28.23, -2.88, 1.34)
	pt3dadd(49.41, 28.68, -2.99, 1.34)
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  }
}
proc shape3d_7() {
  dend[11] {	pt3dadd(139.12, 70.52, -40.74, 0.64)
	pt3dadd(139.23, 70.81, -30.93, 0.64)
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  }
}
proc shape3d_8() {
  dend[12] {	pt3dadd(127.22, 78.8, -44.15, 0.84)
	pt3dadd(127.41, 79.31, -44.15, 0.84)
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  }
}
proc shape3d_9() {
  dend[15] {	pt3dadd(-16.29, -6, 1.92, 1.66)
	pt3dadd(-16.54, -6.06, 1.92, 1.66)
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  }
}
proc shape3d_10() {
  dend[15] {	pt3dadd(-143.81, -24.35, 8, 0.58)
	pt3dadd(-144.2, -24.48, 8, 0.58)
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  }
}
proc shape3d_11() {
  dend[16] {	pt3dadd(-61.04, -81.33, 11.62, 0.96)
	pt3dadd(-61.17, -81.59, 11.62, 0.96)
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  }
}
proc shape3d_12() {
  dend[16] {	pt3dadd(-131.4, -165.42, 8.64, 0.52)
	pt3dadd(-131.85, -165.8, 8.64, 0.52)
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  }
}
proc shape3d_13() {
  dend[19] {	pt3dadd(-14.26, -0.57, 14.18, 1.34)
	pt3dadd(-14.07, -0.89, 14.18, 1.34)
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  }
}
proc shape3d_14() {
  dend[21] {	pt3dadd(-54.26, 23.93, -51.19, 0.96)
	pt3dadd(-55.84, 24.32, -51.19, 0.96)
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  }
}
proc shape3d_15() {
  dend[21] {	pt3dadd(-151.89, 51.99, -82.01, 0.32)
	pt3dadd(-152.28, 52.12, -81.69, 0.32)
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  }
}
proc shape3d_16() {
  dend[22] {	pt3dadd(-74.74, -17.37, -19.09, 1.16)
	pt3dadd(-75.19, -17.5, -19.09, 1.16)
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  }
}
proc shape3d_17() {
  dend[24] {	pt3dadd(-112, -92.35, -28.79, 1.02)
	pt3dadd(-111.8, -92.99, -28.79, 1.02)
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  }
}
proc shape3d_18() {
  dend[25] {	pt3dadd(-45.32, 0.37, -37.54, 1.48)
	pt3dadd(-46.41, 0.88, -37.54, 1.48)
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  }
}
proc shape3d_19() {
  dend[25] {	pt3dadd(-202.09, 17.23, -35.08, 0.84)
	pt3dadd(-202.09, 17.61, -35.08, 0.84)
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  }
}
proc shape3d_20() {
  dend[29] {	pt3dadd(-68.74, 25.01, -32.95, 0.96)
	pt3dadd(-69.19, 24.56, -32.95, 0.96)
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  }
}
proc shape3d_21() {
  dend[31] {	pt3dadd(-78.7, 46.78, -52.47, 0.64)
	pt3dadd(-79.02, 46.97, -52.47, 0.64)
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  }
}
proc shape3d_22() {
  dend[34] {	pt3dadd(-110.65, 63.18, -38.5, 1.22)
	pt3dadd(-111.1, 63.57, -38.5, 1.22)
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  }
}
proc shape3d_23() {
  dend[35] {	pt3dadd(-10.29, 39.32, -9.49, 2.68)
	pt3dadd(-10.87, 39.83, -9.49, 2.68)
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  }
}
proc shape3d_24() {
  dend[36] {	pt3dadd(-67.17, 165.13, -28.58, 1.08)
	pt3dadd(-67.62, 165.9, -28.58, 1.08)
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  }
}
proc shape3d_25() {
  dend[39] {	pt3dadd(-49.81, 84.36, -16.32, 0.9)
	pt3dadd(-49.36, 84.55, -16.32, 0.9)
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  }
}
proc shape3d_26() {
  dend[40] {	pt3dadd(-63.87, 160.78, -7.14, 0.58)
	pt3dadd(-65.28, 162.19, -7.14, 0.58)
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  }
}
proc shape3d_27() {
  dend[41] {	pt3dadd(-151.32, 105.76, 4.05, 0.58)
	pt3dadd(-151.32, 105.19, 4.05, 0.58)
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  }
}
proc shape3d_28() {
  dend[42] {	pt3dadd(29.7, -67.24, -57.59, 1.02)
	pt3dadd(29.44, -67.91, -60.04, 1.02)
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  }
}
proc shape3d_29() {
  apic[2] {	pt3dadd(23.69, 47.27, -6.08, 0.9)
	pt3dadd(23.88, 47.33, -6.08, 0.9)
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  }
}
proc shape3d_30() {
  apic[5] {	pt3dadd(45.65, 35.99, -8.53, 1.48)
	pt3dadd(46.61, 36.05, -8.53, 1.48)
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  }
}
proc shape3d_31() {
  apic[7] {	pt3dadd(185.09, 32.48, -33.06, 0.9)
	pt3dadd(185.8, 31.52, -33.06, 0.84)
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  }
}
proc shape3d_32() {
  apic[9] {	pt3dadd(17.58, 79.24, -48.63, 1.34)
	pt3dadd(17.13, 79.82, -48.95, 1.34)
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  }
}
proc shape3d_33() {
  apic[11] {	pt3dadd(-7.4, 119.34, -10.66, 1.4)
	pt3dadd(-8.36, 119.72, -10.66, 1.4)
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  }
}
proc shape3d_34() {
  apic[13] {	pt3dadd(-50.67, 120.18, -21.33, 1.16)
	pt3dadd(-51.24, 120.18, -21.33, 1.16)
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  }
}
proc shape3d_35() {
  apic[17] {	pt3dadd(-94.33, 129.65, -15.89, 0.76)
	pt3dadd(-95.22, 130.55, -15.89, 0.76)
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  }
}
proc shape3d_36() {
  apic[19] {	pt3dadd(0.92, 203.47, -4.59, 1.8)
	pt3dadd(0.79, 203.6, -4.59, 1.8)
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  }
}
proc shape3d_37() {
  apic[23] {  }
  apic[24] {pt3dclear()
	pt3dadd(13.33, 178.15, -25.7, 4.02)
	pt3dadd(13.62, 181.49, -25.59, 4.02)
	pt3dadd(13.62, 182.26, -25.59, 4.02)
	pt3dadd(13.94, 182.96, -25.59, 4.02)
	pt3dadd(13.94, 183.48, -25.59, 4.02)
	pt3dadd(14.13, 184.12, -25.59, 4.02)
	pt3dadd(14.13, 187.57, -25.59, 4.02)
	pt3dadd(14.45, 188.02, -25.59, 4.02)
	pt3dadd(14.7, 188.46, -25.59, 4.02)
	pt3dadd(15.02, 188.91, -25.59, 4.02)
	pt3dadd(15.09, 189.36, -25.59, 4.02)
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  }
}
proc shape3d_38() {
  apic[28] {	pt3dadd(106.6, 226.91, -26.87, 0.52)
	pt3dadd(107.69, 226.65, -26.87, 0.52)
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  }
}
proc shape3d_39() {
  apic[31] {	pt3dadd(91.2, 196.05, -53.64, 1.28)
	pt3dadd(91.59, 195.67, -53.64, 1.28)
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  }
}
proc shape3d_40() {
  apic[33] {	pt3dadd(-2.6, 234.79, -47.03, 1.48)
	pt3dadd(-3.05, 235.24, -47.99, 1.48)
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  }
}
proc shape3d_41() {
  apic[35] {	pt3dadd(-21.13, 285.78, -14.93, 1.22)
	pt3dadd(-21.39, 285.91, -13.54, 1.22)
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  }
}
proc shape3d_42() {
  apic[38] {	pt3dadd(-32.13, 287.5, -52.47, 0.84)
	pt3dadd(-32.51, 287.44, -52.47, 0.84)
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  }
}
proc shape3d_43() {
  apic[39] {	pt3dadd(-31.76, 288.25, -41.38, 1.08)
	pt3dadd(-34.51, 288.06, -41.38, 1.08)
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  }
}
proc shape3d_44() {
  apic[41] {	pt3dadd(-30.43, 263.24, -67.72, 0.9)
	pt3dadd(-30.94, 262.41, -67.72, 0.9)
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  }
}
proc shape3d_45() {
  apic[43] {	pt3dadd(76.73, 382.82, 8, 0.64)
  }
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  }
}
proc shape3d_46() {
  apic[45] {	pt3dadd(23.48, 573.32, -43.94, 3.32)
	pt3dadd(23.28, 574.02, -43.94, 3.32)
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  }
}
proc shape3d_47() {
  apic[46] {	pt3dadd(-6.96, 758.23, -58.44, 2.1)
	pt3dadd(-7.21, 758.81, -58.44, 2.1)
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  }
}
proc shape3d_48() {
  apic[47] {	pt3dadd(-19.01, 913.34, -90.86, 0.9)
	pt3dadd(-19.33, 914.49, -90.86, 0.9)
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  }
}
proc shape3d_49() {
  apic[49] {	pt3dadd(-70.98, 1075.71, -108.45, 0.7)
	pt3dadd(-71.43, 1076.22, -108.45, 0.7)
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  }
}
proc shape3d_50() {
  apic[50] {	pt3dadd(-53.03, 1085.11, -87.87, 0.7)
	pt3dadd(-53.03, 1086.52, -87.87, 0.7)
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  }
}
proc shape3d_51() {
  apic[52] {	pt3dadd(-46.17, 1189.59, -85.31, 0.12)
	pt3dadd(-45.4, 1189.97, -85.31, 0.12)
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  }
}
proc shape3d_52() {
  apic[54] {	pt3dadd(-22.63, 1160.65, -102.69, 0.76)
	pt3dadd(-22.95, 1161.55, -102.69, 0.76)
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  }
}
proc shape3d_53() {
  apic[58] {	pt3dadd(-5.44, 797.68, -61, 0.84)
	pt3dadd(-5.38, 798.25, -61, 0.84)
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  }
}
proc shape3d_54() {
  apic[58] {	pt3dadd(-21.86, 999.33, -69.74, 0.84)
	pt3dadd(-22.31, 1000.1, -69.74, 0.84)
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  }
}
proc shape3d_55() {
  apic[59] {	pt3dadd(-93.32, 1166.44, -54.28, 0.44)
	pt3dadd(-93.83, 1166.83, -54.28, 0.44)
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  }
}
proc shape3d_56() {
  apic[61] {	pt3dadd(-25.17, 1185.51, -56.41, 0.44)
	pt3dadd(-25.68, 1186.15, -56.41, 0.44)
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  }
}
proc shape3d_57() {
  apic[63] {	pt3dadd(34.96, 706.98, -59.93, 1.8)
	pt3dadd(35.02, 708, -59.93, 1.8)
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  }
}
proc shape3d_58() {
  apic[63] {	pt3dadd(64.35, 901.55, -59.93, 1.54)
	pt3dadd(63.96, 902.38, -59.93, 1.54)
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  }
}
proc shape3d_59() {
  apic[64] {	pt3dadd(33.3, 1072, -58.65, 1.16)
	pt3dadd(32.98, 1072.7, -58.65, 1.16)
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  }
}
proc shape3d_60() {
  apic[64] {	pt3dadd(-74.21, 1181.73, -7.68, 0.44)
	pt3dadd(-74.34, 1181.86, -7.68, 0.38)
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  }
}
proc shape3d_61() {
  apic[66] {	pt3dadd(110.75, 1131.13, -26.98, 0.76)
	pt3dadd(110.88, 1131.39, -26.98, 0.76)
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  }
}
proc shape3d_62() {
  apic[67] {	pt3dadd(89.78, 1132.81, -111.87, 0.76)
	pt3dadd(90.17, 1133.45, -112.83, 0.76)
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  }
}
proc shape3d_63() {
  apic[68] {	pt3dadd(42.23, 631.07, -36.26, 2.82)
	pt3dadd(42.8, 631.71, -36.26, 2.82)
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  }
}
proc shape3d_64() {
  apic[69] {	pt3dadd(52.64, 862.7, -41.06, 1.34)
	pt3dadd(53.28, 863.92, -41.06, 1.34)
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  }
}
proc shape3d_65() {
  apic[70] {	pt3dadd(11.09, 1038.67, 1.6, 0.7)
	pt3dadd(10.39, 1040.07, 1.6, 0.7)
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  }
}
proc shape3d_66() {
  apic[70] {	pt3dadd(-72.29, 1201.2, 10.24, 0.2)
	pt3dadd(-73, 1201.58, 10.24, 0.2)
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  }
}
proc shape3d_67() {
  apic[72] {	pt3dadd(87.53, 1048.25, -8.53, 0.7)
	pt3dadd(87.59, 1049.14, -8.53, 0.7)
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  }
}
proc shape3d_68() {
  apic[75] {	pt3dadd(113.08, 1029.16, 7.14, 0.64)
	pt3dadd(113.28, 1030.19, 7.46, 0.64)
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  }
}
proc shape3d_69() {
  apic[76] {	pt3dadd(126.31, 958.35, -50.01, 1.8)
	pt3dadd(127.14, 959.63, -50.01, 1.8)
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  }
}
proc shape3d_70() {
  apic[79] {	pt3dadd(180.08, 1123.98, -84.14, 0.52)
	pt3dadd(179.7, 1125.26, -84.14, 0.52)
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  }
}
proc shape3d_71() {
  apic[82] {	pt3dadd(172.72, 1120.32, -13.22, 0.58)
	pt3dadd(171.95, 1120.25, -13.22, 0.58)
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  }
}
proc shape3d_72() {
  apic[84] {	pt3dadd(217.6, 1043.91, -36.26, 0.58)
	pt3dadd(218.56, 1045.44, -36.26, 0.58)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
  shape3d_12()
  shape3d_13()
  shape3d_14()
  shape3d_15()
  shape3d_16()
  shape3d_17()
  shape3d_18()
  shape3d_19()
  shape3d_20()
  shape3d_21()
  shape3d_22()
  shape3d_23()
  shape3d_24()
  shape3d_25()
  shape3d_26()
  shape3d_27()
  shape3d_28()
  shape3d_29()
  shape3d_30()
  shape3d_31()
  shape3d_32()
  shape3d_33()
  shape3d_34()
  shape3d_35()
  shape3d_36()
  shape3d_37()
  shape3d_38()
  shape3d_39()
  shape3d_40()
  shape3d_41()
  shape3d_42()
  shape3d_43()
  shape3d_44()
  shape3d_45()
  shape3d_46()
  shape3d_47()
  shape3d_48()
  shape3d_49()
  shape3d_50()
  shape3d_51()
  shape3d_52()
  shape3d_53()
  shape3d_54()
  shape3d_55()
  shape3d_56()
  shape3d_57()
  shape3d_58()
  shape3d_59()
  shape3d_60()
  shape3d_61()
  shape3d_62()
  shape3d_63()
  shape3d_64()
  shape3d_65()
  shape3d_66()
  shape3d_67()
  shape3d_68()
  shape3d_69()
  shape3d_70()
  shape3d_71()
  shape3d_72()
}

objref all, somatic, axonal, basal, apical
proc subsets() { local i
  objref all, somatic, axonal, basal, apical
  all = new SectionList()
    soma all.append()
    axon all.append()
    for i=0, 42 dend[i] all.append()
    for i=0, 86 apic[i] all.append()

  somatic = new SectionList()
    soma somatic.append()

  axonal = new SectionList()
    axon axonal.append()

  basal = new SectionList()
    for i=0, 42 dend[i] basal.append()

  apical = new SectionList()
    for i=0, 86 apic[i] apical.append()

}
proc geom() {
}
proc geom_nseg() {
  soma area(.5) // make sure diam reflects 3d points
}
proc biophys() {
    Ri=100    		// intracellular resistivity ohm-cm
    Cm=0.9      		// specific membrane capacitance in uF/cm^2
    Rm=15000      		// specific membrane resistivity in ohm/cm^2 
    v_init=-88     	// to obtain a membrane potential of -75 at the soma 
    spinescale=2		// factor used to membrane area to account for spines
    na_segment = 3000
    na_soma = 60
    na_node= 2500 
	na_myelin=80			// in dendrites pS/um2
						
	Km_soma=5				// units in pS/um2
	Km_axon=50			

	Kv_soma=20			// (HVA Kv current, units in pS/um2)
	Kv_axon=2000				

	Kv1_soma=0.01			// 0.01 mOhm/cm2 = 100 pS/um2 (LVA-Kv current)
	Kv1_axon=0.20 			
	
	spinescale=2
	
	vshift_na=10			//provides AP threshold of ~ -60 mV at soma 
	vshift_nax=10	
	


// dendrites

		forall {insert pas g_pas=1/(Rm/spinescale) 
				cm=Cm*spinescale 
				Ra=Ri 					
				e_pas=v_init
					}

		forall {insert Kv1 gbar_Kv1=Kv1_soma*spinescale
				insert Km gbar_Km=Km_soma*spinescale
				insert Kv gbar_Kv=Kv_soma*spinescale
					}		

		for i=0,42 {
				dend[i] {insert na gbar_na=na_soma*spinescale}			 
					}
		
		for i=0,86 {
				apic[i] {insert na gbar_na=na_soma*spinescale}			 
					}



// soma-hillock area

		soma  {nseg=8}
		soma  {g_pas=1/Rm cm=Cm}
		soma  {insert na gbar_na = na_soma} 
		soma  {insert Kv1 gbar_Kv1 = Kv1_soma} 
		soma  {insert Kv gbar_Kv = Kv_soma}	
		soma  {insert Km gbar_Km = Km_soma} 		
		
	
				

// Subcellular properties of initial segment
		
		axon  {nseg=20}
		axon	 {Rm=15000}		
		axon  {g_pas=1/Rm cm=Cm}
		axon	 {Ri=100}
		axon  {e_pas=-75}
		axon  {insert nax axon.gbar_nax(0:0.725)= na_segment:na_segment
				   axon.gbar_nax(0.775:1)= na_segment:na_soma}
		
		axon {insert Kv1 axon.gbar_Kv1(0:0.725) = Kv1_soma:Kv1_axon
					axon.gbar_Kv1(0.775:1) = Kv1_axon:Kv1_axon}
		
		axon {insert Kv axon.gbar_Kv(0:0.725) = Kv_soma:Kv_axon
					axon.gbar_Kv(0.775:1) = Kv_axon:Kv_axon}	

		axon {insert Km axon.gbar_Km(0:0.725) = Km_soma:Km_axon
					axon.gbar_Km(0.775:1) = Km_axon:Km_axon}
		
			

// Myelinated axon properties


	// for i=0,44 {
	// 	myelin[i] {g_pas=1/Rm  cm=0.02} 
	// 	myelin[i] {e_pas=-75}			
	// 	myelin[i] {insert Km gbar_Km = Km_soma}
	// 	myelin[i]	{insert Kv gbar_Kv = Kv_soma}
	// 	myelin[i] {insert na gbar_na = na_myelin}   
	// }	
	

	// for i=0,41 {
	// 	node[i]  	{g_pas=400/Rm cm=Cm}
	// 	node[i]	{e_pas=-75}	
	// 	node[i]  	{insert nax gbar_nax = na_node} 
	// 	node[i]  	{insert Km gbar_Km = Km_axon}
	// 	node[i]  	{insert Kv1 gbar_Kv1 = Kv1_axon} 
	// 	node[i]	{insert Kv gbar_Kv = Kv_axon} 		
	// }

	forall ena=55
	forall ek=-85

    hfactor = 0.000429 		
	hinvtau = 0.003087
	spinescale = 2	

	forall {insert ih
			gh_ih = -0.0002
			ehd_ih=-45		 
	
		} 
	
	access soma
	area(0.5)
	distance()


    //exponential in basal dendrites
	for i=0,42 {
		access dend[i]
		ghdbar_ih=gh_ih+(hfactor*(exp(hinvtau*distance(.5))))
		ghdbar_ih=ghdbar_ih*spinescale	
	}


    //exponential in apical dendrites

	for i=0,86 {
		access apic[i]
		ghdbar_ih=gh_ih+(hfactor*(exp(hinvtau*distance(.5))))
		ghdbar_ih=ghdbar_ih*spinescale	
	}

	soma {ghdbar_ih=ghdbar_ih/spinescale}	



    // remove ih from the reconstructed axon 
	
	axon {ghdbar_ih=0}
		

	// for i=0,44 {
	// 	myelin[i] {ghdbar_ih=0} 
	// 	}
	// for i=0,41 {
	// 	node[i]  	{ghdbar_ih=0}

	// 	}
}
access soma

proc init () {
    celldef()
}

endtemplate KoleCell
